run("In [+]");
//setTool("rectangle");
makeRectangle(41, 38, 100, 92);
makeRectangle(41, 32, 100, 98);
makeRectangle(38, 32, 103, 98);
run("Duplicate...", "duplicate channels=1 frames=7");
selectWindow("21_11_19 BY4741_pEB11_CLIs-001 (series 01)-cell2.tif");
selectWindow("21_11_19 BY4741_pEB11_CLIs-001 (series 01)-cell2-1.tif");
run("In [+]");
run("Measure");
run("Measure");
run("Measure");
run("Measure");
run("In [+]");
//setTool("freehand");
run("Measure");
run("3D Manager Options", "volume surface compactness fit_ellipse integrated_density mean_grey_value std_dev_grey_value minimum_grey_value maximum_grey_value distance_to_surface centre_of_mass_(pix) bounding_box radial_distance exclude_objects_on_edges_xy distance_between_centers=10 distance_max_contact=1.80 drawing=Contour");
run("3D Manager");
selectWindow("21_11_19 BY4741_pEB11_CLIs-001 (series 01)-cell2-1.tif-3Dseg");
Ext.Manager3D_Segment(245, 4095);
run("In [+]");
run("In [+]");
run("In [+]");
run("In [+]");
Ext.Manager3D_AddImage();
Ext.Manager3D_Measure();
close();
run("Duplicate...", "use");
selectWindow("c:1/2 z:13/31 t:7/8 - BY4741_pEB11_CLIs-001.nd2 (series 01)");
run("In [+]");
run("In [+]");
run("In [+]");
setAutoThreshold("Default dark");
//run("Threshold...");
setThreshold(245, 65535);
//setTool("wand");
doWand(42, 47);
setBackgroundColor(0, 0, 0);
run("Clear Outside");
resetThreshold();
run("Close");
doWand(69, 49);
setMinAndMax(0, 4095);
setOption("ScaleConversions", true);
run("8-bit");
run("Auto Local Threshold", "method=Niblack radius=5 parameter_1=0 parameter_2=0 white");
//run("Threshold...");
run("Analyze Particles...", "size=6-Infinity pixel display exclude clear add");
resetThreshold();
roiManager("Deselect");
run("Close");
//setTool("rectangle");
run("Fill Holes");
setAutoThreshold("Default dark");
//run("Threshold...");
run("Analyze Particles...", "size=6-Infinity pixel display exclude clear add");

