CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Input images:', 'Max projections through whole cell', '3 channels in order: Nuclei, particles, WGA (cytoplasm)', ' ']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split channels.', '1. Hoechst — nuclei', '2. Particles', '3. WGA — cytoplasmic vesicles']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
    Select the input image:original
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:Hoechst
    Channel number:2
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    Image name:Beads
    Channel number:3
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    Image name:WGA

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify nuclei — aggressive smoothing, Otsu threshold, with slight downward correction. Shape works best for drawind dividing lines but very highly clumped nuclei aren’t separated.']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):70,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:4
    Threshold correction factor:0.85
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:7|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notes:['Identify cell boundaries from WGA. Smoothing helps with over-merged objects but needs Otsu to work well. Higher regularization factor helps to separate merged cells too. Highly packed cells become inaccurate but do not include background.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cytoplasm
    Select the method to identify the secondary objects:Propagation
    Select the input image:WGA
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    Regularization factor:0.10
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify phagocytosed particles']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
    Select the input image:Beads
    Name the primary objects to be identified:AllParticles
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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