CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Input images:', 'Max projections through whole cell over time *currently tiff format*', '3 channels in order: Nuclei, particles, WGA (cytoplasm)', ' ']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Extracting metadata from image headers is used for TIFF or ND2 hyperstacks. The timepoint is in the T column. You might have to update Names and Types to see the results here.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<FileName>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['For a time-lapse image we should see a row for each timepoint']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split channels.', '1. Hoechst — nuclei', '2. Particles', '3. WGA — cytoplasmic vesicles']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
    Select the input image:original
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:Hoechst
    Channel number:2
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    Image name:Beads
    Channel number:3
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    Image name:WGA

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify nuclei — aggressive smoothing, Otsu threshold, with slight downward correction. Shape works best for drawind dividing lines but very highly clumped nuclei aren’t separated.']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
    Select the input image:Hoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):70,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:4
    Threshold correction factor:0.85
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:7|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notes:['Identify cell boundaries from WGA. Smoothing helps with over-merged objects but needs Otsu to work well. Higher regularization factor helps to separate merged cells too. Highly packed cells become inaccurate but do not include background. Faint areas that look like part of cell but don’t contain large particles tend to be omitted… try correction factor and more smoothing to help. If correction factor is too small (0.5) then the bleedthrough will be counted as cell and false pos. will result. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cytoplasm
    Select the method to identify the secondary objects:Propagation
    Select the input image:WGA
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    Regularization factor:0.10
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:4.5
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
OverlayOutlines:[module_num:8|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notes:['for testing']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:WGA
    Name the output image:CytoplasmOnOrig
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Outer
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    Select objects to display:Cytoplasm

IdentifyPrimaryObjects:[module_num:9|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notes:['Identify beads as particles']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
    Select the input image:Beads
    Name the primary objects to be identified:AllParticles
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MaskObjects:[module_num:10|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notes:['Identify internalized particles as those at least 50% in the cytoplasm area. This works better than “Relate Objects” because it does not count beads that are outside the cell but touching its edge. But, the cell area is sometimes underestimated so that must be well corrected.']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
    Select objects to be masked:AllParticles
    Name the masked objects:InternalizedParticles
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoplasm
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.5
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:11|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notes:['Define external particles as those outside cytoplasm (< 50% overlap with cells)']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
    Select objects to be masked:AllParticles
    Name the masked objects:ExternalParticles
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cytoplasm
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.51
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

GrayToColor:[module_num:12|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notes:['Recolor channels for output']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
    Select a color scheme:RGB
    Select the image to be colored red:WGA
    Select the image to be colored green:Beads
    Select the image to be colored blue:Hoechst
    Name the output image:OriginalColor
    Relative weight for the red image:1.5
    Relative weight for the green image:1.0
    Relative weight for the blue image:2
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
RescaleIntensity:[module_num:13|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notes:['Rescale the colorized original image for export (0.0625 would be 4095)']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
    Select the input image:OriginalColor
    Name the output image:OrigColorRescale
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.04
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
OverlayOutlines:[module_num:14|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notes:['Outline cytoplasm and nuclei on original image ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigColorRescale
    Name the output image:CellsOnOriginal
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FEFE0A
    Select objects to display:Cytoplasm
    Select outline color:#FEFEFE
    Select objects to display:Nuclei

OverlayOutlines:[module_num:15|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notes:['Outline internalized particles on original image']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigColorRescale
    Name the output image:InternalOnOriginal
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FEFE0A
    Select objects to display:InternalizedParticles

OverlayOutlines:[module_num:16|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notes:['Outline external particles on original image + internalized']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:InternalOnOriginal
    Name the output image:InternalExternalParticlesOnOriginal
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#20FEFE
    Select objects to display:ExternalParticles

SaveImages:[module_num:17|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notes:['Save image of cells using metadata']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
    Select the type of image to save:Image
    Select the image to save:CellsOnOriginal
    Select method for constructing file names:Single name
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    Enter single file name:\g<FileName>_cells1_t\g<T>
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:18|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notes:['Save internal/external particles image using metadata']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
    Select the type of image to save:Image
    Select the image to save:InternalExternalParticlesOnOriginal
    Select method for constructing file names:Single name
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    Enter single file name:\g<FileName>_particles1_t\g<T>
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:19|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notes:['Save counts']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_AllParticles,Image|Count_InternalizedParticles,Image|Count_Nuclei,Image|FileName_original,Image|Metadata_T
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:1_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
