/**
  * Wound Healing Tool
  * Collaborators: 
  *     Nathalie Cahuzac, CNRS, IGMM, SPLICOS THERAPEUTICS; 
  *     Virginie Georget, MRI-CRBM
  *
  * Measure the area of a wound in a cellular tissue on a stack 
  * of images representing a time-series
  *
  * (c) 2010-2017, INSERM
  * written by Volker Baecker at Montpellier RIO Imaging (www.mri.cnrs.fr)
  *
*/


var helpURL = "http://dev.mri.cnrs.fr/wiki/imagej-macros/Wound_Healing_Tool"
var varianceFilterRadius = 10;
var threshold = 50;
var radiusOpen = 4;
var minSize = 10000;
var methods = newArray("variance", "find edges");
var method = "variance";
var measureInPixelUnits = false;

macro "Unused Tool - C037" { }

macro "MRI Wound Healing Tool Help Action Tool - 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"{
    run('URL...', 'url='+helpURL);
}

macro 'Measure Wound Healing Action Tool - C000T4b12m' {
	run("Select None");
	getPixelSize(unit, pixelWidth, pixelHeight);
	run("Duplicate...", "duplicate");
    setForegroundColor(0, 0, 0);
    setBackgroundColor(255, 255, 255);
    roiManager("reset")
    roiManager("Associate", "true");
    if (method=="variance") 
        thresholdVariance();
    else 
        thresholdFindEdges();
    run("Convert to Mask", " black");
    resetThreshold();
    run("Invert", "stack");
    for (i=0; i<radiusOpen; i++) {
        run("Dilate", "stack");
    }
    for (i=0; i<radiusOpen; i++) {
        run("Erode", "stack");
    }
    run("Select All");
    run("Enlarge...", "enlarge=-" + radiusOpen + " pixel");
    run("Invert", "stack");
    run("Analyze Particles...", "size="+minSize+"-Infinity circularity=0.00-1.00 show=Nothing add stack");
    close();
    run("Clear Results");
    if (measureInPixelUnits)
    		run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
    roiManager("Measure"); 
    roiManager("Show None");
	roiManager("Show All");
}

macro 'Measure Wound Healing Action Tool Options' {
     Dialog.create("Wound Healing Tool Options");
     Dialog.addChoice("method", methods, method);
     Dialog.addNumber("variance filter radius", varianceFilterRadius);
     Dialog.addNumber("threshold", threshold);
     Dialog.addNumber("radius open", radiusOpen);
     Dialog.addNumber("min. size", minSize);
     Dialog.addCheckbox("ignore spatial calibration", measureInPixelUnits);
     Dialog.show();
     
     method = Dialog.getChoice();
     varianceFilterRadius= Dialog.getNumber();
     threshold= Dialog.getNumber();
     radiusOpen = Dialog.getNumber();
     minSize = Dialog.getNumber();
     measureInPixelUnits = Dialog.getCheckbox();
}

function thresholdVariance() {
    run("Variance...", "radius=" + varianceFilterRadius + " stack");
    run("8-bit");
    setThreshold(0,threshold);
}

function thresholdFindEdges() {
    run("Find Edges", "stack");
    run("Invert", "stack");
    setAutoThreshold("Percentile dark");
}

